PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024
  Window size (pixels) = [2048, 1152]
  expName = AB0422
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Instructions

        If you see an odd number, please press the F key on your keyboard.
        If you see an even number, please press the J key on your keyboard.
        Please focus your attention and try to respond as accurately and swiftly as possible. Once you are ready, we will begin the test.
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        # open file with instructions
        #with open('instruction.txt', 'r') as file:
        #    text = file.read()

        # add the text in the variable
        #ext_instructions.text = text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractors
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    TextComponent text_disctractors
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $dist
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  Routine T1_number
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    TextComponent text_T1
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $T1
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  Routine T2_probe
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    TextComponent text_T2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $T2
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  Routine Ask_T1
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    TextComponent blankT1_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T1ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Odd-F    Even-J
    TextComponent blankT1_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $responseT1
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Ask_T2
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    TextComponent blankT2_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T2ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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      text:
        ?

        Related-F    Unrelated-J
    TextComponent blankT2_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $responseT2
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine T0_context
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    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T0
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    TextComponent blankContext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = LuckList.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('T0', '手脚'), ('T2', '脚手'), ('T1', '七七'), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '商店'), ('T2', '店铺'), ('T1', '一一'), ('lagT1', 10), ('lagT2', 3), ('lagEnd', 7), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '窗帘'), ('T2', '帘幔'), ('T1', '八八'), ('lagT1', 10), ('lagT2', 7), ('lagEnd', 3), ('responseT1', 'f'), ('responseT2', 'f')]),
      OrderedDict([('T0', '猫咪'), ('T2', '小猫'), ('T1', '九九'), ('lagT1', 10), ('lagT2', 1), ('lagEnd', 9), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '思考'), ('T2', '沉思'), ('T1', '五五'), ('lagT1', 10), ('lagT2', 7), ('lagEnd', 3), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '背包'), ('T2', '手袋'), ('T1', '三三'), ('lagT1', 10), ('lagT2', 3), ('lagEnd', 7), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '稻草'), ('T2', '草草'), ('T1', '四四'), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'f'), ('responseT2', 'f')]),
      OrderedDict([('T0', '杂草'), ('T2', '草根'), ('T1', '七七'), ('lagT1', 10), ('lagT2', 3), ('lagEnd', 7), ('responseT1', 'j'), ('responseT2', 'f')]),
      OrderedDict([('T0', '承诺'), ('T2', '诺言'), ('T1', '二二'), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'f'), ('responseT2', 'f')]),
      OrderedDict([('T0', '利润'), ('T2', '亏损'), ('T1', '七七'), ('lagT1', 7), ('lagT2', 1), ('lagEnd', 12), ('responseT1', 'j'), ('responseT2', 'f')])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
    Routine T0_context
    LoopInitiator trials_context loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractors.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('dist', '运鹿')]),
        OrderedDict([('dist', '更心')]),
        OrderedDict([('dist', '南菌')]),
        OrderedDict([('dist', '鸡墨')]),
        OrderedDict([('dist', '下子')]),
        OrderedDict([('dist', '味那')]),
        OrderedDict([('dist', '点籃')]),
        OrderedDict([('dist', '局出')]),
        OrderedDict([('dist', '籍公')]),
        OrderedDict([('dist', '上卉')]),
        OrderedDict([('dist', '饿花')]),
        OrderedDict([('dist', '声和')]),
        OrderedDict([('dist', '及遢')]),
        OrderedDict([('dist', '最迅')]),
        OrderedDict([('dist', '管牛')]),
        OrderedDict([('dist', '未旧')]),
        OrderedDict([('dist', '不价')]),
        OrderedDict([('dist', '学派')]),
        OrderedDict([('dist', '戏杂')]),
        OrderedDict([('dist', '怕秤')]),
        OrderedDict([('dist', '械场')]),
        OrderedDict([('dist', '里明')]),
        OrderedDict([('dist', '大肌')]),
        OrderedDict([('dist', '湖现')]),
        OrderedDict([('dist', '烈菜')]),
        OrderedDict([('dist', '庞的')]),
        OrderedDict([('dist', '诈老')]),
        OrderedDict([('dist', '人铜')]),
        OrderedDict([('dist', '管狗')]),
        OrderedDict([('dist', '滑租')]),
        OrderedDict([('dist', '桌车')]),
        OrderedDict([('dist', '马老')]),
        OrderedDict([('dist', '常痕')]),
        OrderedDict([('dist', '糊肉')]),
        OrderedDict([('dist', '挤坐')]),
        OrderedDict([('dist', '法田')]),
        OrderedDict([('dist', '吧花')]),
        OrderedDict([('dist', '我笑')]),
        OrderedDict([('dist', '阅发')]),
        OrderedDict([('dist', '针浆')]),
        OrderedDict([('dist', '滑旋')]),
        OrderedDict([('dist', '信头')]),
        OrderedDict([('dist', '更小')]),
        OrderedDict([('dist', '汁开')]),
        OrderedDict([('dist', '膏考')]),
        OrderedDict([('dist', '蟑糖')]),
        OrderedDict([('dist', '臂酒')]),
        OrderedDict([('dist', '害慢')]),
        OrderedDict([('dist', '夹开')]),
        OrderedDict([('dist', '栈找')]),
        OrderedDict([('dist', '地友')])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
      Routine distractors
    LoopTerminator trials_context
    Routine T1_number
    LoopInitiator trials_T1 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractors.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine distractors
    LoopTerminator trials_T1
    Routine T2_probe
    LoopInitiator trials_T2 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = distractors.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine distractors
    LoopTerminator trials_T2
    Routine Ask_T1
    Routine Ask_T2
  LoopTerminator block
